CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'â\x80\x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâ\x80\x99ll need to specify the image type as â\x80\x98Color imageâ\x80\x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "N_R")
    Name to assign these images:OrigStain1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "N_G")
    Name to assign these images:OrigStain2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the first image. ']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
    Select the input image:OrigStain1
    Name the output image:IllumStain1
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the second image. ']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
    Select the input image:OrigStain2
    Name the output image:IllumStain2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Apply the illumination function to the original images and examine the result.']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
    Select the input image:OrigStain1
    Name the output image:CorrectedStain1
    Select the illumination function:IllumStain1
    Select how the illumination function is applied:Divide
    Select the input image:OrigStain2
    Name the output image:CorrectedStain2
    Select the illumination function:IllumStain2
    Select how the illumination function is applied:Divide
    Clip intensity values:No

Align:[module_num:8|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notes:['(Optional) Since accurate colocalization requires accurate positioning of the features in both images, it is sometimes worth using this module to align the images.', '', 'If aligning the images, it is important to remember that there needs to be sufficient overlap in image features, other than the features suspected of overlapping, in order to align them. For example, attempting to align two images in which there is little to no colocalization will probably result in poor alignment. ']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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:OrigStain1
    Name the first output image:Stain1
    Select the second input image:OrigStain2
    Name the second output image:Stain2

MeasureColocalization:[module_num:9|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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
    Select images to measure:Stain1, Stain2
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

IdentifyPrimaryObjects:[module_num:10|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notes:['Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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
    Select the input image:Stain1
    Name the primary objects to be identified:Objects1
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:11|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notes:['The settings are identical to the first IdentifyPrimaryObjects, but here we identify the nuclei from Stain 2.']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
    Select the input image:Stain2
    Name the primary objects to be identified:Objects2
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:12|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notes:['If we want to consider objects which touch or overlap each other are considered to be colocalized, this module establishes a â\x80\x98parent-childâ\x80\x99 relationship between two sets of objects. A â\x80\x98parentâ\x80\x99 object is one that touches, overlaps or encloses a â\x80\x98childâ\x80\x99 object. Object2 objects that touch or overlap with an Object2 object are considered to be colocalized and will be assigned as a parent to a corresponding child.  All others have no children and are labeled accordingly.', '', 'In addition, the distance between object centroids may also be obtained with this module by enabling the â\x80\x98Calculate distances?â\x80\x99â\x80\x99 setting.']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
    Parent objects:Objects1
    Child objects:Objects2
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ExpandOrShrinkObjects:[module_num:13|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notes:['If we only want to consider objects whose centroids are N pixels apart, this module shrinks the objects identified in the Stain1 image to a point and names the resultant points ShrunkenObjects1. The second ExpandOrShrinkObjects does the same for Stain2.']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
    Select the input objects:Objects1
    Name the output objects:ShrunkenObjects1
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:14|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notes:['If we only want to consider objects whose centroids are N pixels apart, this module shrinks the objects identified in the Stain1 image to a point and names the resultant points ShrunkenObjects1. The second ExpandOrShrinkObjects does the same for Stain2.']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
    Select the input objects:Objects2
    Name the output objects:ShrunkenObjects2
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:15|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notes:['We now expand the previously shrunken point objects by 2 pixels, i.e., two pixels are added to either side of the single-pixel object to create new objects which are 5 pixels across, as shown in Fig. 2. These new objects are named ExpandedObjects1 and ExpandedObjects2.']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
    Select the input objects:ShrunkenObjects1
    Name the output objects:ExpandedObjects1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
ExpandOrShrinkObjects:[module_num:16|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notes:['We now expand the previously shrunken point objects by 2 pixels, i.e., two pixels are added to either side of the single-pixel object to create new objects which are 5 pixels across, as shown in Fig. 2. These new objects are named ExpandedObjects1 and ExpandedObjects2.']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
    Select the input objects:ShrunkenObjects2
    Name the output objects:ExpandedObjects2
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
RelateObjects:[module_num:17|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notes:['In this case, ExpandedObjects1 are assigned to be parents, with ExpandedObject2 as children. Therefore, objects in ExpandedObjects1 which have children and 2 pixels apart or less are colocalized with objects in ExpandedObjects2.']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
    Parent objects:ExpandedObjects1
    Child objects:ExpandedObjects2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ClassifyObjects:[module_num:18|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notes:['The ClassifyObjects module categorizes objects into bins associated with a particular measurement.  In this case, the chosen measurement is the child count for Objects1. The value 0.5 is chosen as the measurement since we want to distinguish between colocalized objects with children (child count of 1 or greater) versus those without (child count of 0). ', '', 'The result of this module is an absolute count and percentage of objects that fall into the colocalized/non-colocalized bins, and an annotation to each Objects1 object as to whether it falls into a particular bin or not. This approach works well if you just want a yes/no readout per object.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Objects1
    Select the measurement to classify by:Children_Objects2_Count
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NotColocalized,Colocalized
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:19|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notes:['The FilterObjects module effectively does the same operation as Classify Objects, but rather than simply assigning a label to each object, FilterObjects removes all objects that do not pass a criterion. Using the same choice of measurement and cutoff as in Classify Objects, only those Objects1 objects which fall into the co-localized bin are retained. This feature is useful if you want to perform additional operations or measurements on the remaining objects. ', '', 'These two modules can also be used to perform the same operations on the ExpandedObjects1 object set.']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
    Select the objects to filter:Objects1
    Name the output objects:ColocalizedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_Objects2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:20|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notes:['This module masks (i.e., â\x80\x98hidesâ\x80\x99 from consideration) the pixels of the Objects1 object set which are in common with the Objects2 object set. The result of this operation is the colocalized area as a new object set, named ColocalizedRegions ']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
    Select objects to be masked:Objects1
    Name the masked objects:ColocalizedRegion
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Objects2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:21|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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
    Measure the area occupied by:Objects
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    Select object sets to measure:ColocalizedRegion, Objects1

CalculateMath:[module_num:22|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notes:['We divide the area occupied by ColocalizedRegion by the area occupied by Objects1 to get a per-image fraction.']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
    Name the output measurement:Stain1Colocalized
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ColocalizedRegion
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Objects1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:23|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
