CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:OrigComet
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigComet
    Name the output image:IllumGray
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigComet
    Name the output image:CorrGray
    Select the illumination function:IllumGray
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrGray
    Name the primary objects to be identified:Comet
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:60
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.001
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0.75
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
MaskImage:[module_num:8|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
    Select the input image:CorrGray
    Name the output image:MaskedComet
    Use objects or an image as a mask?:Objects
    Select object for mask:Comet
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MaskedComet
    Name the primary objects to be identified:CometHead
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskObjects:[module_num:10|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
    Select objects to be masked:Comet
    Name the masked objects:CometTail
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CometHead
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Comet, CometHead, CometTail
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:12|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
    Select images to measure:CorrGray
    Select objects to measure:Comet
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:10

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:CorrGray
    Select objects to measure:Comet, CometHead, CometTail

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrGray
    Name the output image:CometOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Comet
    Select outline color:Green
    Select objects to display:CometHead

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CometOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigComet
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CometHeadOutline
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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