CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'The rule criteria will select only one file from the full list: ADSAStaphInfection2_A01_w2247376DD-6ADD-442D-AE47-F54A05F3EA94.tif']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "ADSAStaphInfection2_A01_w2")
    Name to assign these images:OrigWorms
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the well containing the worms.']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
    Input:OrigWorms
    Object:Well
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:6|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notes:['Shrink the well object by a few pixels to get rid of the bright ring around the exterior. Without this step, the CorrectIlluminationCalc module will end up with a skewed result.']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
    Select the input objects:Well
    Name the output objects:ShrunkenWell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:Yes
    Name the outline image:DoNotSave

ImageMath:[module_num:7|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notes:['Invert the intensity of the image, since the background method in CorrectIlluminationCalc assumes a light foreground and dark background.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedWorms
    Image or measurement?:Image
    Select the first image:OrigWorms
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:8|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notes:['Mask the inverted image external to the well. CorrectIlluminationCalculate will take the mask into account when computing the illumination function.']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
    Select the input image:InvertedWorms
    Name the output image:MaskedInvertedWorms
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenWell
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    Invert the mask?:No

CorrectIlluminationCalculate:[module_num:9|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notes:['First, we attempt to perform background correction by fitting a polynomial to the background pixels of the image.']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
    Select the input image:MaskedInvertedWorms
    Name the output image:PolynomialIllum
    Select how the illumination function is calculated:Background
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    Block size:2
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['We then apply the illumination function to the original image by subtraction and examine the result. The background is effectively removed from the inverted image.']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
    Select the input image:MaskedInvertedWorms
    Name the output image:PolynomialCorrected
    Select the illumination function:PolynomialIllum
    Select how the illumination function is applied:Subtract

MaskImage:[module_num:11|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notes:['This time, we’ll use a different correctio method on the original image. Mask the original image external to the well. CorrectIlluminationCalculate will take the mask into account when computing the illumination function.']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
    Select the input image:OrigWorms
    Name the output image:MaskedOrigWorms
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenWell
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    Invert the mask?:No

CorrectIlluminationCalculate:[module_num:12|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notes:['Perform background correction using the convex hull method; see the help for ‘Smoothing method’ for more details on how this method works. ']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
    Select the input image:MaskedOrigWorms
    Name the output image:ConvexHullIllumWorm
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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notes:['Apply the illumination function to the original image by division and examine the result. The background is effectively removed from the original image. The corrected image would then need to be inverted using ImageMath for object identification.']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
    Select the input image:MaskedOrigWorms
    Name the output image:ConvexHullCorrWorm
    Select the illumination function:ConvexHullIllumWorm
    Select how the illumination function is applied:Divide
