CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the color image by matching files in the folder against the text ‘.JPG’']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "1.JPG")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the color image to exclude the text labels by entering specific cropping coordinates.']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
    Select the input image:Original
    Name the output image:Cropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:45,629
    Top and bottom rectangle positions:1,445
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    Remove empty rows and columns?:No
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
ColorToGray:[module_num:6|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notes:['Retain the red channel for later segmentation.']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
    Select the input image:Cropped
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
ImageMath:[module_num:7|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notes:['Since object identification assumes light objects against a dark background, invert the grayscale intensities of the red channel so the dark areas appear bright and vice versa.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRed
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the individual cells. Three-class thresholding works better than the default two-class method. Some adjustment of the correction factor, smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Input:InvertedRed
    Object:Cells
    Typical diameter of objects, in pixel units (Min,Max):5,9999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:9|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notes:['Overlay the cell outlines in the inverted image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InvertedRed
    Name the output image:InvertedRedOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells

MeasureObjectNeighbors:[module_num:10|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notes:['Obtain neighborhood metrics by expanding the cells until they touch. Retain an output image for later export.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ColorNeighbors
    Select colormap:hot
    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:11|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notes:['Measure morphological features from the cell objects.']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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure intensity features from cell objects against the red channel.']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
    Hidden:1
    Select an image to measure:OrigRed
    Select objects to measure:Cells

SaveImages:[module_num:13|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notes:['Save the neighbor output image as an 8-bit TIF, appending the text ‘colorneighbors’ to the original filename of the color image.']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
    Select the type of image to save:Image
    Select the image to save:ColorNeighbors
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ColorNeighbors
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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notes:['Save the overlay image as an 8-bit TIF, appending the text ‘invertedred’ to the original filename of the color image.']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
    Select the type of image to save:Image
    Select the image to save:InvertedRedOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_InvertedRed
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the cell objects and the image will be saved to separate .csv files. Mean per-image cell measurements will also be exported to the image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
