CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['The phosphorylated histone probe is a marker for detecting mitotic cells. By segmenting this channel, a threshold is automatically chosen that identifies the pixels that are "positive" for the PH3 probe. This method will yield inconsistent results if there are no mitotic cells in view, so a minimum threshold value is chosen. This minimum is chosen hueristically, based upon the threshold chosen by this module, e.g. half the chosen threshold.']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:PH3
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:7|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notes:['The ph3 probe and dna stain overlap with each other, so this co-localization can be used to classify cells. This is relatioship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects.']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
    Parent objects:Nuclei
    Child objects:PH3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:8|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notes:['After the relationship between objects has been ennumerated, the FilterObjects module can transform this relationship into a binary relationship, i.e. 0 if there is no PH3 and 1 if there is PH3.']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
    Select the objects to filter:Nuclei
    Name the output objects:PH3PosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_PH3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:9|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Select images to measure:OrigGreen, OrigBlue
    Select objects to measure:Nuclei

OverlayOutlines:[module_num:10|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notes:['The intensity measurements can be exported into a spreadsheet, but sometimes a useful way to process the measurements is to see them overlayed on top of the objects of interest, in this the nuclei.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:OrigGreenOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:11|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notes:['We’ll choose a threshold for the intensity that determines if a cell is mitotic or not. The MaxIntensity is an effective measurement, since the probe itself is so specific.']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MaxIntensity_OrigGreen
    Select the image on which to display the measurements:OrigGreenOverlay
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ClassifyObjects:[module_num:12|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notes:['From the data displayed image, the value of 0.2 was chosen as an appropriate threshold for determining PH3+ cells. This approach contrasts with the colocalization method to classify cells that was done by the RelateObjects module. The 0.2 threshold parallels the threshold automatically chosen by the IdentifyPrimaryObjects module on the PH3 image.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MaxIntensity_OrigGreen
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.2
    Give each bin a name?:Yes
    Enter the bin names separated by commas:PH3Neg,PH3Pos
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
CalculateMath:[module_num:13|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notes:['The module is for convenience. The percentage of cells positive for PH3 could be calculated from the exported spreadsheet. However, it is a simple enough metric that it can be directly calculated in the pipeline.']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_PH3PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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