CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load bright-field (all worms, w1), GFP (signal of interest,w2) and mCherry (head marker, w3) images.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:Worms
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['For brightfield data with dark well edges and bright illumination in the center of the image, the ‘ConvexHull’ approach works well. For other variations in illumination, test one of the alternative methods.']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
    Select the input image:Worms
    Name the output image:Background
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Divide away the variation in illumination.']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
    Select the input image:Worms
    Name the output image:IllumCorrWorms
    Select the illumination function:Background
    Select how the illumination function is applied:Divide

ImageMath:[module_num:7|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notes:['Invert the image to make worms bright (foreground) and background dark.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:WormsInverted
    Image or measurement?:Image
    Select the first image:IllumCorrWorms
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:8|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notes:['Apply an intensity threshold to define worms vs background. Adjust thresholding method and/or correction factor if the result of the thresholding does not separate foreground and background well. ']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
    Select the input image:WormsInverted
    Name the output image:WormsBinary
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
UntangleWorms:[module_num:9|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notes:['This step untangles the worms using a provided WormModel. This worm model was built from a large number of samples of single worms. If the result of the untangling is not satisfactory, either create your own worm model based on your image data (see example pipeline), or adjust the provided worm model by opening it in a text editor and change settings for worm length, area etc. You may also want to adjust the ‘Maximum Complexity’ which controlls how complex clusters the untangling will handle. Large clusters (>6 worms) may be slow to process.', '', 'For the training set file location, set this to the folder containing the file ‘WormModel.xml’']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
    Select the input binary image:WormsBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Input Folder|Bioimaging/ExamplePipelineStraighten
    Training set file name:WormModel.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:gist_rainbow
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Process all clusters
    Custom complexity:400

OverlayOutlines:[module_num:10|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notes:['Optional:This step is only for visualization of the untangling result. ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Worms
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:OverlappingWorms

StraightenWorms:[module_num:11|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notes:['Worm straightening takes the result from untangling as input, and both straightens the worms and extracts intensity measurements. ‘Worm width’ should be adjusted as to cover the diameter of your worms. Feature extraction is however limited to the mask defined at untangling, and a wide worm width will not affect the result. For feature extraction using the low-resolution worm atlas, specify the number of transverse segments and longitudinal stripes for extraction of intensity measurements. The positioning of the segments will be adjusted to the length and width of the mask defining the worm, and thereby compensating for variations in length and width. Aslo select the images (here GFP and mCherry) from where to extract intensity measurements using the atlas.', '', 'For the training set file location, set this to the folder containing the file ‘WormModel.xml’']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
    Select the input untangled worm objects:NonOverlappingWorms
    Name the output straightened worm objects:StraightenedWorms
    Worm width:20
    Training set file location:Default Input Folder|Bioimaging/ExamplePipelineStraighten
    Training set file name:WormModel.xml
    Image count:2
    Measure intensity distribution?:Yes
    Number of transverse segments:5
    Number of longitudinal stripes:1
    Align worms?:Top brightest
    Alignment image:mCherry
    Select an input image to straighten:mCherry
    Name the output straightened image:Straightened_mCherry
    Select an input image to straighten:GFP
    Name the output straightened image:Straightened_GFP

IdentifyPrimaryObjects:[module_num:12|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notes:['Here we chose to also detect the head markers, by thresholding the mCherry image. For this type of spot-detection, a pre-processing step using ‘EnhanceOrSupressFeatures’ may improve the result.']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
    Select the input image:mCherry
    Name the primary objects to be identified:HeadMarkers
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0025
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
RelateObjects:[module_num:13|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notes:['The detected head markers are associated with a particular worm using this module. No adjustments needed.']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
    Parent objects:NonOverlappingWorms
    Child objects:HeadMarkers
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
GrayToColor:[module_num:14|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notes:['Optional: This is for visual comparison of the straightened worms and can be omitted.']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
    Select a color scheme:RGB
    Select the image to be colored red:Straightened_mCherry
    Select the image to be colored green:Straightened_GFP
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    Name the output image:StraightenedRG
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
GrayToColor:[module_num:15|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notes:['Optional: This is also for visualization of the detected objects overlaied on the combined GFP and mCherry image.', 'Right-click on output image to rescal image contrast to ‘Log normalized’ if signals are difficult to see.']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
    Select a color scheme:RGB
    Select the image to be colored red:mCherry
    Select the image to be colored green:GFP
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    Name the output image:OrigRG
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:16|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notes:['Otional: This step is only for visualization of the result and can be omitted.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigRG
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:NonOverlappingWorms
    Select outline color:green
    Select objects to display:HeadMarkers

ExportToSpreadsheet:[module_num:17|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notes:['Here, intensity measurements using the worm atlas as well as marker counts are exported to a spreadsheet. One can chose to export all data, or as here, ony export a subset of the measurements taken. The resulting csv-files can be opened in a text editor or e.g. Excel.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in older Excel versions?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_GFP,Image|FileName_mCherry,Image|FileName_Worms,NonOverlappingWorms|Worm_StdIntensity_Straightened_GFP_T1of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_GFP_T2of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_GFP_T3of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_GFP_T4of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_GFP_T5of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_mCherry_T1of5_L1of1,NonOverlappingWorms|Worm_StdIntensity_Straightened_mCherry_T2of5_L1of1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:StraightenedWorms
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
