CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Specimen>.*)_(?P<Stain>.*)_(?P<FrameNumber>[0-9]*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "GFPHistone")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\\\\\\\/](?P<Run>.*)$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does containregexp "GFPHistone")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in all folders against the text pattern ‘GFPHistone’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "GFPHistone")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Group the analysis by the ‘Run’ metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Run

ColorToGray:[module_num:5|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notes:['Convert the color image to grayscale.']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
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the fly embryos from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:OrigGray
    Name the primary objects to be identified:Embryos
    Typical diameter of objects, in pixel units (Min,Max):30,9999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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notes:['Measure the morphology of each embryo.']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
    Select objects to measure:Embryos
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:8|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notes:['Measure the grayscale intensity of each embryo.']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
    Hidden:1
    Select an image to measure:OrigGray
    Select objects to measure:Embryos

TrackObjects:[module_num:9|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notes:['Track the embryos across images using the Overlap method: tracked objects are identified by the amount of frame-to-frame overlap. Save an image of embryos labeled with a unique number across time.']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
    Choose a tracking method:Overlap
    Select the objects to track:Embryos
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:No
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
OverlayOutlines:[module_num:10|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notes:['Overlay the embryo outlines on the grayscale image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGray
    Name the output image:OutlineImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Embryos

Tile:[module_num:11|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notes:['Tile the original color image, the outlined image and the image of tracked labels together.']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
    Select an input image:OrigColor
    Name the output image:AdjacentImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OutlineImage
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:12|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notes:['Save the tiled image as an PNG, naming each image according to ‘Specimen’ and ‘Frame’ metadata of the original image. Save the image in a new sub-folder created and named according to the ‘Run’ metadata.']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
    Select the type of image to save:Image
    Select the image to save:AdjacentImage
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Specimen>-\\\\g<FrameNumber>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\\\\g<Run>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the embryo objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\\\\g<Run>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Embryos
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
