CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "f.jpg")
    Name to assign these images:ColorFluor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "b.jpg")
    Name to assign these images:ColorLung
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ColorLung
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayLung
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:ColorFluor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:GrayTumor
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Input:GrayTumor
    Object:tumor
    Typical diameter of objects, in pixel units (Min,Max):3,99999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:tumor
    Calculate the Zernike features?:Yes

ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedImage
    Image or measurement?:Image
    Select the first image:GrayLung
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:GrayTumor
    Multiply the second image by:0.5
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CombinedImage
    Name the output image:TumorOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:tumor

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:TumorOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:ColorFluor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tumors
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
