CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the original RGB image.  Here we use text-exact match to find all files with the .png extension (there are two sample images provided).', '', 'For more images from this image set, go to the BBBC (www.broadinstitute.org/bbbc).']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain ".png")
    Name to assign these images:RawData
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert the image from RGB to grayscale. This image will be used for detecting the worms. No need to change parameters.']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
    Select the input image:RawData
    Conversion method:Combine
    Image type:RGB
    Name the output image:CombinedGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Illumination correction evens out the background of the image.  We create an approximation of the background pattern of illumination including well edges using the convex hull function. This assumes that the edges of the image are darker than the center. ']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
    Select the input image:CombinedGray
    Name the output image:BackgroundIllumination
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['We apply the illumination function in this step to remove illumination variation from the image.']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
    Select the input image:CombinedGray
    Name the output image:BgCorrectedWorms
    Select the illumination function:BackgroundIllumination
    Select how the illumination function is applied:Divide

ImageMath:[module_num:8|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notes:['In this step, we manipulate the colors of the images for a later filtering step.  ']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:WormsImage
    Image or measurement?:Image
    Select the first image:BgCorrectedWorms
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:9|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notes:['The background correction does not always succeed n removing shadows close to the well edge. Use the calculated background to find the well edges, and remove them in the following two steps.']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
    Select the input image:BackgroundIllumination
    Name the output image:WellContent
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Erosion:[module_num:10|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
    Select the input image:WellContent
    Name the output image:WellContentEroded
    Structuring element:disk,5

Crop:[module_num:11|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
    Select the input image:WormsImage
    Name the output image:CropedWormsImage
    Select the cropping shape:Image
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    Remove empty rows and columns?:No
    Select the masking image:WellContentEroded
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
IdentifyPrimaryObjects:[module_num:12|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notes:['The first approximation of worms that we find, from the corrected image of worms only, is of large worm objects, where worms are touching.  We find otsu adaptive works best for finding worms of varying intensity.  If the worms are not being picked up well, you may adjust the threshold correction factor.  The typical diameter  of objects (wich is in fact the diameter of a disc with the same area as the object)  is set so the min is about the size of the smallest worm you would like found and the largest number is arbitrarily large- since we want to find all touching worms regardless of cluster size.']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
    Select the input image:CropedWormsImage
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):15,40000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:13|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notes:['This steps makes the objects binary; a requirement for the Untangle module.']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
    Select the input objects:WormObjects
    Name the output image:WormObjectsBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:14|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notes:['Untangle the worms- we use a previous training set available on the BBBC. Point the training set file location to the folder containing the file ‘TrainingSetORO.xml’.']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
    Select the input binary image:WormObjectsBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Input Folder|Bioimaging/ExamplePipelineOilRedO
    Training set file name:TrainingSetORO.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Process all clusters
    Custom complexity:400

ColorToGray:[module_num:15|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notes:['Now it’s time to define fat regions. The fat has best contrast in the blue image channel.']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
    Select the input image:RawData
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:16|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notes:['Invert the blue image- this is the best image to visualize the fat staining which represents the phenotype of interest.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvBlue
    Image or measurement?:Image
    Select the first image:OrigBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Crop:[module_num:17|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notes:['Crop the blue image (fat staining) in the shape of the untangled worms.Note that all overlapping regions are excluded.']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
    Select the input image:InvBlue
    Name the output image:CropBlue
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:NonOverlappingWorms

IdentifyPrimaryObjects:[module_num:18|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notes:['In the blue image, we threshold just the darkest part of the blue- the fat staining.  The threshold can be changed to get the exact phenotype of interest.  Here we look for the most intense staining patterns.  We look for areas of staining as small as 2 pixels, and arbitrarily large.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:FatRegions
    Typical diameter of objects, in pixel units (Min,Max):2,40000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.6
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
MeasureObjectSizeShape:[module_num:19|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notes:['Measure the shape and size of the regions we defined as fat. ']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
    Select objects to measure:FatRegions
    Calculate the Zernike features?:No

RelateObjects:[module_num:20|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notes:['Here, we relate the fat objects to the untangled worms.  This allows us to assign shape  measurements for the fat to particular worms, which enables us to discover population heterogeneity.']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
    Parent objects:NonOverlappingWorms
    Child objects:FatRegions
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
OverlayOutlines:[module_num:21|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notes:['This module is only for visualization and may be omitted. We show the outline of the worms (in mixed colors) and the outlines of the fatty regions  within the non-overlapping regions of the worms (in blue).']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawData
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#26FF2B
    Select objects to display:OverlappingWorms
    Select outline color:#0800F7
    Select objects to display:FatRegions

ExportToSpreadsheet:[module_num:22|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notes:['Export all the measurements to a file that can be read in Excel. Add more mesurement modules (such as intensity, shape and texture) if you believe thay may provide useful information. Select what measurements to export by clicking ‘select the columns of measurements to export’.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in older Excel versions?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:NonOverlappingWorms
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
