CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does endwith ".npy")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', "Here we're going to extract the well location that each image was taken in.  We'll also collect the folder the images reside in, so that we can match the illumination correction function with each well next step in NamesAndTypes."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Channel (?P<ChannelNumber>[0-9])-[0-9]{2}-(?P<WellRow>[A-P])-(?P<WellCol>[0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Folder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the images by matching files in the folder against the unique text pattern for each stain: 'Channel 1' for protein, 'Channel 2' for the nuclei image. Also, exactly match the text for the illumination correction function file names. ", '', '---', 'So that you can match each well\'s images to the single set of illumination correction functions, rather than matching the image set by "Order" we\'ve matched it by "Metadata", which allows us to instruct CellProfiler that each well will have its own set of OrigDNA and OrigProtein images but that they\'ll all use the illumination correction function found in the same folder.', '', '']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllumProtein': u'Folder', u'OrigDNA': u'Folder', u'IllumDNA': u'Folder', u'OrigProtein': u'Folder'}, {u'IllumProtein': None, u'OrigDNA': u'Well', u'IllumDNA': None, u'OrigProtein': u'Well'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Channel 1")
    Name to assign these images:OrigProtein
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Channel 2")
    Name to assign these images:OrigDNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does eq "VitraChannel1ILLUM.npy")
    Name to assign these images:IllumProtein
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does eq "VitraChannel2ILLUM.npy")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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notes:['Correct both images by applying the illumination correction functions through division. ']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
    Select the input image:OrigProtein
    Name the output image:CorrProtein
    Select the illumination function:IllumProtein
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Distance-B method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrProtein
    Number of pixels by which to expand the primary objects:8
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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
IdentifyTertiaryObjects:[module_num:8|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the corrected images.']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
    Select images to measure:CorrProtein
    Select objects to measure:Nuclei, Cells, Cytoplasm

CalculateMath:[module_num:10|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notes:['Calculate the nuclei-to-cell ratio of the mean protein intensity.']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
    Name the output measurement:Ratio1
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:11|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notes:['Calculate the cytoplasm-to-cell ratio of the mean protein intensity.']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
    Name the output measurement:Ratio2
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:12|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notes:['Overlay the nucleus and cell outlines on the protein image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrProtein
    Name the output image:Outlined
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Blue
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Cells

SaveImages:[module_num:13|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notes:["Save the nuclei overlay image as an 8-bit TIF, appending the text '_Outlined' to the original filename of the protein image."]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
    Select the type of image to save:Image
    Select the image to save:Outlined
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigProtein
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlined
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
