CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern ‘.JPG’']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain ".JPG")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Combine the color image into a grayscale image.']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
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Smooth:[module_num:6|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notes:['Smooth the image using a Gaussian filter.']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
    Select the input image:OrigGray
    Name the output image:Corrected
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the tissue region using three-class Otsu.']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
    Input:Corrected
    Object:Tissue
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureImageAreaOccupied:[module_num:8|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notes:['Measure the area occupied by the tissue region.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tissue
    Retain a binary image of the object regions?:No
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
ExportToSpreadsheet:[module_num:9|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notes:['Export any measurements to a comma-delimited file (.csv). Since the tissue area is an image measurement, it is included in the per-image file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
