CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "6-1.jpg")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PlateTemplate.png")
    Name to assign these images:PlateTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:OrigColor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigRed
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigBlue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:OrigGreen
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:22
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigRed
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract
    Select the input image:OrigBlue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:OrigGreen
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract

ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:0.5
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedImage
    Image or measurement?:Image
    Select the first image:CorrBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrGreen
    Multiply the second image by:1.0
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
Align:[module_num:11|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:PlateTemplate
    Name the first output image:AlignedPlate
    Select the second input image:CorrRed
    Name the second output image:AlignedRed
    Select the additional image:CombinedImage
    Name the output image:AlignedCombined
    Select how the alignment is to be applied:Similarly

MaskImage:[module_num:12|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
    Select the input image:CombinedImage
    Name the output image:MaskCombined
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:CorrRed
    Name the output image:MaskRedPlate
    Use objects or an image as a mask?:Image
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    Select image for mask:AlignedPlate
    Invert the mask?:No

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SubtractedRed
    Image or measurement?:Image
    Select the first image:MaskRedPlate
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MaskCombined
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:15|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notes:['This works.']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
    Input:MaskRedPlate
    Object:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:16|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notes:['Turning on advanced settings']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
    Input:MaskRedPlate
    Object:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:17|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notes:['advanced settings on', 'typical diameter of objects is <= 5.']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
    Input:MaskRedPlate
    Object:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:18|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notes:['advanced settings on', 'typical diameter of objects is > 5', 'Discard objects outside the diameter range = No']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
    Input:MaskRedPlate
    Object:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):6,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:19|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
    Hidden:1
    Select an image to measure:SubtractedRed
    Select objects to measure:Colonies

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:Colonies
    Calculate the Zernike features?:Yes

ClassifyObjects:[module_num:21|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:2
    Select the object to be classified:Colonies
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,5,75,1300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Tiny,Small,Large
    Retain an image of the classified objects?:No
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    Select the object to be classified:Colonies
    Select the measurement to classify by:Intensity_MeanIntensity_SubtractedRed
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.05
    Give each bin a name?:Yes
    Enter the bin names separated by commas:White,Red
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskRedPlate
    Name the output image:OutlinedColonies
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Colonies

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OutlinedColonies
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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